PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://forms.gle/zoCuUNGiAvAhxEa77
  End Message = ご協力ありがとうございました.
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = (1024, 768)
  expName = 2026_1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine inst_1
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    ImageComponent inst_1_img
      image = start_1.PNG
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent inst_1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_2
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    ImageComponent inst_2_img
      image = start_2.PNG
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent inst_2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_3
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    CodeComponent name_code
      Code Type = Both
      disabled = True
      Begin Experiment:
        name_text = ""
      Begin JS Experiment:
        name_text = "";
      Begin JS Routine:
        name_text = "";
      Begin Routine:
        name_text = ""
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if key == 'return' and len(name_text) > 0:
                continueRoutine = False
            elif key == 'backspace':
                name_text = name_text[:-1]
            elif len(key) == 1:
                name_text += key

        if int(t * 2) % 2 == 0:
            name_cursor.text = name_text + '|'
        else:
            name_cursor.text = name_text + ' '
      Each JS Frame:
        let keys = psychoJS.eventManager.getKeys();
        for (let i = 0; i < keys.length; i++) {
            let key = keys[i];
            if (key === 'return' && name_text.length > 0) {
                continueRoutine = false;
            } else if (key === 'backspace') {
                name_text = name_text.slice(0, -1);
            } else if (key.length === 1) {
                name_text += key;
            }
        }

        if (Math.floor(t * 2) % 2 === 0) {
            name_cursor.setText(name_text + '|');
        } else {
            name_cursor.setText(name_text + ' ');
        }
      End JS Routine:
        psychoJS.experiment.addData('participant_name', name_box.text);
      End Routine:
        thisExp.addData('participant_name', name_box.text)
    ImageComponent inst_3_img
      image = name_modified.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent name_cursor
      color = $(1.0000, 1.0000, 1.0000)
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text = |
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    TextboxComponent name_box
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = ここへ入力してください...
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent name_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent name_click
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = |
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  Routine inst_mail
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    CodeComponent mail_code
      Code Type = Both
      disabled = True
      Begin Experiment:
        mail_text = ""
        event.clearEvents()
      Begin JS Experiment:
        mail_text = "";
        psychoJS.eventManager.clearEvents();
      Begin JS Routine:
        mail_text = "";
      Begin Routine:
        mail_text = ""
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if key == 'return' and len(mail_text) > 0:
                continueRoutine = False
            elif key == 'backspace':
                mail_text = mail_text[:-1]
            elif key == 'at':
                mail_text += '@'
            elif key == 'period':
                mail_text += '.'
            elif key == 'minus':
                mail_text += '-'
            elif key == 'underscore':
                mail_text += '_'
            elif len(key) == 1 and key.isalnum():
                mail_text += key

        if int(t * 2) % 2 == 0:
            mail_cursor.text = mail_text + '|'
        else:
            mail_cursor.text = mail_text + ' '
      Each JS Frame:
        let keys = psychoJS.eventManager.getKeys();
        for (let i = 0; i < keys.length; i++) {
          let key = keys[i];
          if (key === 'return' || key === 'enter' || key === 'Enter') {
            if (mail_text.length > 0) continueRoutine = false;
          } else if (key === 'backspace' || key === 'Backspace') {
            mail_text = mail_text.slice(0, -1);
          } else if (key === 'BracketLeft') {
            mail_text += '[a]';
          } else if (key === '.' || key === 'period') {
            mail_text += '.';
          } else if (key === '-' || key === 'minus') {
            mail_text += '-';
          } else if (key === '_' || key === 'IntlRo') {
            mail_text += '_';
          } else if (typeof key === 'string' && key.length === 1) {
            mail_text += key;
          }
        }
        if (Math.floor(t * 2) % 2 === 0) {
          mail_cursor.setText(mail_text + '|');
        } else {
          mail_cursor.setText(mail_text + ' ');
        }
      End JS Routine:
        psychoJS.experiment.addData('participant_email', mail_box.text);
      End Routine:
        thisExp.addData('participant_email', mail_box.text)
    ImageComponent inst_mail_img
      color = yellow
      image = mail_modified.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent mail_note
      color [set every frame] = yellow
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ＊ご注意＊テンキーは使えません
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    TextboxComponent mail_box
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = ここへ入力してください...
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent mail_cursor
      color [set every frame] = white
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text = ｜
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    KeyboardComponent key_mail
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_age
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    CodeComponent age_code
      Code Type = Both
      disabled = True
      Begin Experiment:
        age_text = ""
      Begin JS Experiment:
        age_text = "";
      Begin JS Routine:
        age_text = "";
      Begin Routine:
        age_text = ""
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if key == 'return' and len(age_text) > 0:
                continueRoutine = False
            elif key == 'backspace':
                age_text = age_text[:-1]
            elif key in ['0','1','2','3','4','5','6','7','8','9']:
                age_text += key
            elif key in ['num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9']:
                age_text += key[-1]

        if int(t * 2) % 2 == 0:
            age_cursor.text = age_text + '|'
        else:
            age_cursor.text = age_text + ' '
      Each JS Frame:
        let keys = psychoJS.eventManager.getKeys();
        for (let i = 0; i < keys.length; i++) {
            let key = keys[i];
            if (key === 'return' && age_text.length > 0) {
                continueRoutine = false;
            } else if (key === 'backspace') {
                age_text = age_text.slice(0, -1);
            } else if ('0123456789'.includes(key)) {
                age_text += key;
            } else if (key.startsWith('num_') && '0123456789'.includes(key.slice(-1))) {
                age_text += key.slice(-1);
            }
        }

        if (Math.floor(t * 2) % 2 === 0) {
            age_cursor.setText(age_text + '|');
        } else {
            age_cursor.setText(age_text + ' ');
        }
      End JS Routine:
        psychoJS.experiment.addData('participant_age', age_box.text);
      End Routine:
        thisExp.addData('participant_age', age_box.text)
    ImageComponent inst_age_img
      image = age_modified.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent age_cursor
      color [set every frame] = white
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text = ｜
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    TextComponent age_note
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ＊ご注意＊テンキーは使えません
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    TextboxComponent age_box
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = ここへ入力してください...
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent age_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_sex
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    CodeComponent sex_code
      Code Type = Both
      Begin Experiment:
        sex_text = ""
      Begin JS Experiment:
        sex_text = "";
      Begin JS Routine:
        sex_text = "";
        psychoJS.eventManager.clearEvents();
      Begin Routine:
        sex_text = ""
        event.clearEvents()
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if key == 'return' and len(sex_text) > 0 and t > 0.5:
            continueRoutine = False
            elif key == 'backspace':
                sex_text = sex_text[:-1]
            elif key in ['m', 'f', 'y']:
                sex_text = key

        if int(t * 2) % 2 == 0:
            sex_cursor.text = sex_text + '|'
        else:
            sex_cursor.text = sex_text + ' '
      Each JS Frame:
        let keys = psychoJS.eventManager.getKeys();
        for (let i = 0; i < keys.length; i++) {
            let key = keys[i];
            if (key === 'return' && sex_text.length > 0 && t > 0.5) {
                continueRoutine = false;
            } else if (key === 'backspace') {
                sex_text = sex_text.slice(0, -1);
            } else if (['m', 'f', 'y'].includes(key)) {
                sex_text = key;
            }
        }

        if (Math.floor(t * 2) % 2 === 0) {
            sex_cursor.setText(sex_text + '|');
        } else {
            sex_cursor.setText(sex_text + ' ');
        }
      End JS Routine:
        if (sex_text === 'm') {
            psychoJS.experiment.addData('participant_sex', '男性');
        } else if (sex_text === 'f') {
            psychoJS.experiment.addData('participant_sex', '女性');
        } else if (sex_text === 'y') {
            psychoJS.experiment.addData('participant_sex', '回答しない');
        }
      End Routine:
        if sex_text == 'm':
            thisExp.addData('participant_sex', '男性')
        elif sex_text == 'f':
            thisExp.addData('participant_sex', '女性')
        elif sex_text == 'y':
            thisExp.addData('participant_sex', '回答しない')
    ImageComponent inst_sex_img
      image = sex_modified.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent sex_cursor
      color [set every frame] = $[1,1,1]
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = |
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  Routine inst_setumei_1
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    ImageComponent inst_setumei_img
      image = setumei_1.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_inst_setumei_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_setumei_2
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    ImageComponent inst_setumei_img_2
      image = setumei_2.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_inst_setumei_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        learned_words = []
        n_conditions = 3
      Begin JS Experiment:
        learned_words = [];
        n_conditions = 3;
      Begin JS Routine:
        if (learned_words.includes(word_id)) {
            continueRoutine = false;
        }
      Begin Routine:
        if word_id in learned_words:
            continueRoutine = False
      End JS Routine:
        if (key_resp.keys === 'e') {
            if (!learned_words.includes(word_id)) {
                learned_words.push(word_id);
            }
        }

        if (learned_words.length >= n_conditions) {
            trials.finished = true;
        }
      End Routine:
        if key_resp.keys == 'e':
            if word_id not in learned_words:
                learned_words.append(word_id)

        if len(learned_words) >= n_conditions:
            trials.finished = True
    ImageComponent image_practice
      image [set every frame] = $image_file
      pos = (0, 0.15)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_demo
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'e','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instruction
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        学習完了：E  のキーを押す
        もう一度学習する：スペースキーを押す
  Routine inst_gakusyu
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    ImageComponent image_gakusyu
      image = gakusyu.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_gakusyu
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_main
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    CodeComponent code_2
      Code Type = Both
      Before Experiment:
        learned_words = []
        n_conditions = 15
      Before JS Experiment:
        learned_words = [];
        n_conditions = 15;
      Begin Experiment:
        exp_timer = None
        learned_words_main = []
        n_conditions_main = 15
      Begin JS Experiment:
        exp_timer = null;
        learned_words_main = [];
        n_conditions_main = 15;
      Begin JS Routine:
        if (exp_timer === null) {
            exp_timer = new util.Clock();
        }

        if (learned_words_main.includes(word)) {
            continueRoutine = false;
        }
      Begin Routine:
        if exp_timer is None:
            exp_timer = core.Clock()

        if word in learned_words_main:
            continueRoutine = False
      Each Frame:
        elapsed = exp_timer.getTime()

        if elapsed >= 600:
            continueRoutine = False
            trials_2.finished = True

        if 300 <= elapsed < 305:
            time_msg.text = '5分経過しました'
        elif 480 <= elapsed < 485:
            time_msg.text = '8分経過しました'
        else:
            time_msg.text = ''
      Each JS Frame:
        let elapsed = exp_timer.getTime();

        if (elapsed >= 600) {
            continueRoutine = false;
            trials_2.finished = true;
        }

        if (elapsed >= 300 && elapsed < 305) {
            time_msg.setText('5分経過しました');
        } else if (elapsed >= 480 && elapsed < 485) {
            time_msg.setText('8分経過しました');
        } else {
            time_msg.setText('');
        }
      End JS Routine:
        if (key_resp_2.keys === 'e') {
            if (!learned_words_main.includes(word)) {
                learned_words_main.push(word);
            }
        }

        if (learned_words_main.length >= n_conditions_main) {
            trials_2.finished = true;
        }
      End Routine:
        if key_resp_2.keys == 'e':
            if word not in learned_words_main:
                learned_words_main.append(word)

        if len(learned_words_main) >= n_conditions_main:
            trials_2.finished = True
    CodeComponent code_timer
      Code Type = Both
      Before Experiment:
        time_limit = 600
        time_message = ""
      Before JS Experiment:
        time_limit = 600;
        time_message = "";
      Begin Experiment:
        time_limit = 600
      Begin JS Experiment:
        time_limit = 600;
      Begin JS Routine:
        if (trials_2.start_time === undefined) {
            trials_2.start_time = globalClock.getTime();
        }
      Begin Routine:
        if not hasattr(trials_2, 'start_time'):
            trials_2.start_time = globalClock.getTime()
      Each Frame:
        elapsed = globalClock.getTime() - trials_2.start_time
        remaining = time_limit - elapsed

        if 298 < elapsed < 302:
            time_message = "5分経過しました。残り5分です。"
        elif 538 < elapsed < 542:
            time_message = "残り時間あと1分です。"
        else:
            time_message = ""

        if remaining <= 0:
            trials_2.finished = True
            continueRoutine = False
      Each JS Frame:
        elapsed = globalClock.getTime() - trials_2.start_time;
        remaining = time_limit - elapsed;

        if (298 < elapsed && elapsed < 302) {
            time_message = "5分経過しました。残り5分です。";
        } else if (538 < elapsed && elapsed < 542) {
            time_message = "残り時間あと1分です。";
        } else {
            time_message = "";
        }

        if (remaining <= 0) {
            trials_2.finished = true;
            continueRoutine = false;
        }
    ImageComponent image_2
      image [set every repeat] = $image_file
      pos = (0, 0.15)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_demo_2
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'e','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instruction_2
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        学習完了：E  のキーを押す
        もう一度学習する：スペースバーを押す
    TextComponent text_timer
      letterHeight = 0.03
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every frame] = $time_message
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    TextComponent time_msg
      color [set every frame] = yellow
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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  Routine inst_JOL
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    ImageComponent image_JOL
      image = JOL_modified.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_JOL
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jol_rating
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    SliderComponent jol_slider
      color = yellow
      font = Meiryo
      forceEndRoutine = True
      granularity = 1
      labels = ["全く自信がない","","","どちらともいえない","","","自信がある"]
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_meaning
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $meaning
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    TextComponent text_jol_instruction
      letterHeight = 0.04
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        先ほど学習した英単語について
        後のテストで解答できると思う度合いを7段階で回答してください
        下記に日本語訳のみ表示されます
    TextComponent scale_numbers
      font = Meiryo
      letterHeight = 0.05
      pos = (0, -0.08)
      startVal [time (s)] = 0.0
      text = 1       2       3       4       5       6      7
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    TextComponent instruction_click
      font = Meiryo
      letterHeight = 0.035
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = スケールにマウスをあててクリックしてください(赤い円が表示され次の単語に進みます）
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  Routine inst_keisan
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    ImageComponent image_keisan
      image = keisan_modified.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_keisan
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Keisan_new
    RoutineSettingsComponent Keisan_new
      stopVal [duration (s)] = 60.0
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    CodeComponent calc_logic
      Code Type = Both
      Begin JS Routine:
        // 最初の問題を作る
        num1 = Math.floor(Math.random() * 80) + 20;  // 20〜99
        num2 = Math.floor(Math.random() * (num1 - 10)) + 10;  // 10〜num1-1
        problem_text = `${num1} - ${num2} = ?`;
        answer_text = "";
      Begin Routine:
        import random

        # 最初の問題を作る
        num1 = random.randint(20, 99)
        num2 = random.randint(10, num1 - 1)
        problem_text = f"{num1} - {num2} = ?"
        answer_text = ""
      Each Frame:
        ## キー入力（ローカル用）：PsychoPy標準のeventで取る
        from psychopy import event

        keys = event.getKeys(keyList=['0','1','2','3','4','5','6','7','8','9','return','backspace'])

        ## 入力処理
        for key in keys:
            if key == 'backspace':
                answer_text = answer_text[:-1]
            elif key == 'return':
                ## 新しい問題を作る
                num1 = random.randint(20, 99)
                num2 = random.randint(10, num1 - 1)
                problem_text = f"{num1} - {num2} = ?"
                answer_text = ""
            else:
                answer_text += key
      Each JS Frame:
        // キー入力（Pavloviaで最も確実な方法）
        let keys = psychoJS.eventManager.getKeys({
          keyList: ['0','1','2','3','4','5','6','7','8','9','return','backspace']
        });

        // 入力処理
        for (let key of keys) {
          if (key === 'backspace') {
            answer_text = answer_text.slice(0, -1);

          } else if (key === 'return') {
            // 新しい問題を作る
            num1 = Math.floor(Math.random() * 80) + 20;          // 20〜99
            num2 = Math.floor(Math.random() * (num1 - 10)) + 10; // 10〜(num1-1)
            problem_text = `${num1} - ${num2} = ?`;
            answer_text = '';

          } else {
            // 数字キー
            answer_text += key;
          }
        }

        // 60秒で終了（60秒間で何問でも解く）
        if (t >= 60) {
          continueRoutine = false;
        }
    TextComponent calc_mondai
      font [set every frame] = Meiryo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $problem_text
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    TextComponent calc_kaitou
      color = yellow
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $answer_text + "|"
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    TextComponent enter_message
      letterHeight = 0.05
      pos = (0, -0.40)
      startVal [time (s)] = 0.0
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      text:
        Enterキーで次の問題へ進んでください。
        入力ミスは修正できません。
    KeyboardComponent key_resp_4
      allowedKeys = ['0','1','2','3','4','5','6','7','8','9','return','backspace']
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine inst_test
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    ImageComponent image_test
      image = test_modified.PNG
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_test
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    CodeComponent code_save
      Code Type = JS
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      End JS Routine:
        // まず現在の値を変数に保存してからデータに記録
        let answer = input_box.text;
        psychoJS.experiment.addData('test_answer', answer);
        psychoJS.experiment.nextEntry();
    TextboxComponent input_box
      bold = False
      color = yellow
      editable = True
      letterHeight = 0.05
      placeholder = ここへ入力してください...
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent code_3
      Code Type = Both
      disabled = True
      Begin Experiment:
        input_text = ""
      Begin JS Experiment:
        input_text = "";
      Begin JS Routine:
        input_text = "";
        psychoJS.eventManager.clearEvents();
      Begin Routine:
        input_text = ""
        event.clearEvents()
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if key == 'return':
                continueRoutine = False
            elif key == 'backspace':
                input_text = input_text[:-1]
            elif key == 'space':
                input_text += ' '
            elif len(key) == 1:
                input_text += key
        cursor.text = input_text
      Each JS Frame:
        let keys = psychoJS.eventManager.getKeys();
        for (let i = 0; i < keys.length; i++) {
            let key = keys[i];
            if (key === 'return') {
                continueRoutine = false;
            } else if (key === 'backspace') {
                input_text = input_text.slice(0, -1);
            } else if (key === 'space') {
                input_text += ' ';
            } else if (key.length === 1) {
                input_text += key;
            }
        }
        cursor.setText(input_text);
      End JS Routine:
        psychoJS.experiment.addData('test_answer', input_text);
      End Routine:
        thisExp.addData('typed_answer', input_text)
    TextComponent cursor
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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    ImageComponent test_img
      image [set every repeat] = $test_image
      pos = (0, 0.2)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent test_instruction
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = 下線部分（２文字分）のスペルをキー入力し，単語を完成してください
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    KeyboardComponent test_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine test2
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    CodeComponent code_save2
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('test_answer', input_box.text);
      End Routine:
        thisExp.addData('test_answer', input_text)
    TextboxComponent test_textbox_modified
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = ここへ入力してください...
      pos = (0, -0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent test2_image
      image [set every repeat] = $test_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine inst_URL
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    ImageComponent image_URL
      image = start_URL.png
      pos = (0, 0.15)
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_URL
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine inst_1
  Routine inst_2
  Routine inst_3
  Routine inst_mail
  Routine inst_age
  Routine inst_sex
  Routine inst_setumei_1
  Routine inst_setumei_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = word_practice.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'No': 1, 'word_id': 'P001', 'word': 'apple', 'image_file': 'demo1.png', 'Keisan': '15+3+2+8', 'Testword': '辞めるーadd_ _men'},
      {'No': 2, 'word_id': 'P002', 'word': 'send', 'image_file': 'demo2.png', 'Keisan': '33+5+85+12', 'Testword': '締めるーbet_ _ en'},
      {'No': 3, 'word_id': 'P003', 'word': 'beautiful', 'image_file': 'demo3.png', 'Keisan': '23+85+41+60', 'Testword': '詰まるーpro_ _ en'}]
    Routine trial
  LoopTerminator trials
  Routine inst_gakusyu
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = word_main.xlsx
    isTrials = False
    loopType = random
    nReps = 70
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    conditions:
      [{'no': 1, 'word_id': 'V1S1', 'word': 'frib ', 'image_file': 'V1S1.PNG', 'syllables': 1, 'letters': 4, 'part_of_speech': 'verb', 'meaning': '～を盗む(動詞)', 'sentence': 'He may frib cookies from the box.', 'translation': '彼は箱からクッキーを盗むかもしれない', 'test_word': 'fr _ _', 'test_image': 'test_V1S1.png'},
      {'no': 2, 'word_id': 'V1S2', 'word': 'glorp', 'image_file': 'V1S2.PNG', 'syllables': 1, 'letters': 5, 'part_of_speech': 'verb', 'meaning': '～を転がす(動詞)', 'sentence': 'The kids like to glorp the ball.', 'translation': '子供たちはボールを転がすのが好きだ', 'test_word': 'gl _ _ p', 'test_image': 'test_V1S2.png'},
      {'no': 3, 'word_id': 'V2S1', 'word': 'smorble', 'image_file': 'V2S1.PNG', 'syllables': 2, 'letters': 7, 'part_of_speech': 'verb', 'meaning': '～を動かす(動詞)', 'sentence': 'The birds smorble their feathers elegantly.', 'translation': '鳥たちは優雅に羽を動かす', 'test_word': 'sm _ _ ble', 'test_image': 'test_V2S1.png'},
      {'no': 4, 'word_id': 'V3S1', 'word': 'flindrocate ', 'image_file': 'V3S1.PNG', 'syllables': 3, 'letters': 12, 'part_of_speech': 'verb', 'meaning': '～を分割する(動詞)', 'sentence': 'She flindrocates her work into tasks.', 'translation': '彼女は仕事をタスクに分割する', 'test_word': 'fl _ _ drocate ', 'test_image': 'test_V3S1.png'}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
    Routine trial_main
  LoopTerminator trials_2
  Routine inst_JOL
  LoopInitiator jol_loop loopType="TrialHandler"
    conditionsFile = word_main.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'no': 1, 'word_id': 'V1S1', 'word': 'frib ', 'image': 'V1S1.PNG', 'syllables': 1, 'letters': 4, 'part_of_speech': 'verb', 'meaning': '～を盗む(動詞)', 'sentence': 'He may frib cookies from the box.', 'translation': '彼は箱からクッキーを盗むかもしれない', 'test_word': 'fr _ _', 'test_image': 'test_V1S1.png'},
      {'no': 2, 'word_id': 'V1S2', 'word': 'glorp', 'image': 'V1S2.PNG', 'syllables': 1, 'letters': 5, 'part_of_speech': 'verb', 'meaning': '～を転がす(動詞)', 'sentence': 'The kids like to glorp the ball.', 'translation': '子供たちはボールを転がすのが好きだ', 'test_word': 'gl _ _ p', 'test_image': 'test_V1S2.png'},
      {'no': 3, 'word_id': 'V2S1', 'word': 'smorble', 'image': 'V2S1.PNG', 'syllables': 2, 'letters': 7, 'part_of_speech': 'verb', 'meaning': '～を動かす(動詞)', 'sentence': 'The birds smorble their feathers elegantly.', 'translation': '鳥たちは優雅に羽を動かす', 'test_word': 'sm _ _ ble', 'test_image': 'test_V2S1.png'},
      {'no': 4, 'word_id': 'V3S1', 'word': 'flindrocate ', 'image': 'V3S1.PNG', 'syllables': 3, 'letters': 12, 'part_of_speech': 'verb', 'meaning': '～を分割する(動詞)', 'sentence': 'She flindrocates her work into tasks.', 'translation': '彼女は仕事をタスクに分割する', 'test_word': 'fl _ _ drocate ', 'test_image': 'test_V3S1.png'},
      {'no': 5, 'word_id': 'V3S2', 'word': 'threnditize', 'image': 'V3S2.PNG', 'syllables': 3, 'letters': 11, 'part_of_speech': 'verb', 'meaning': '～を固定する(動詞)', 'sentence': 'He should threnditize the fence today.', 'translation': '彼は今日フェンスを固定するべきた', 'test_word': 'thr _ _ ditize', 'test_image': 'test_V3S2.png'}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
    Routine jol_rating
  LoopTerminator jol_loop
  Routine inst_keisan
  Routine Keisan_new
  Routine inst_test
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = word_test.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'no': 1, 'word': 'frib ', 'test_word': 'fr _ _', 'test_image': 'test_V1S1.png'},
      {'no': 2, 'word': 'glorp', 'test_word': 'gl _ _ p', 'test_image': 'test_V1S2.png'},
      {'no': 3, 'word': 'smorble', 'test_word': 'sm _ _ ble', 'test_image': 'test_V2S1.png'},
      {'no': 4, 'word': 'flindrocate ', 'test_word': 'fl _ _ drocate ', 'test_image': 'test_V3S1.png'},
      {'no': 5, 'word': 'threnditize', 'test_word': 'thr _ _ ditize', 'test_image': 'test_V3S2.png'},
      {'no': 6, 'word': 'cribble', 'test_word': 'cr _ _ ble', 'test_image': 'test_A1S1.png'},
      {'no': 7, 'word': 'fleng', 'test_word': 'fl _ _ g', 'test_image': 'test_A1S2.png'},
      {'no': 8, 'word': 'zibble', 'test_word': 'z _ _ ble', 'test_image': 'test_A2S1.png'},
      {'no': 9, 'word': 'blontish', 'test_word': 'bl _ _tish', 'test_image': 'test_A2S2.png'},
      {'no': 10, 'word': 'plonkical', 'test_word': 'pl _ _ kical', 'test_image': 'test_A3S1.png'},
      {'no': 11, 'word': 'zlitz ', 'test_word': 'zl _ _ z ', 'test_image': 'test_N1S1.png'},
      {'no': 12, 'word': 'flurp', 'test_word': 'fl _ _ p', 'test_image': 'test_N1S2.png'},
      {'no': 13, 'word': 'sprock ', 'test_word': 'spr _ _ k ', 'test_image': 'test_N2S1.png'},
      {'no': 14, 'word': 'flentity', 'test_word': 'fl _ _ tity', 'test_image': 'test_N2S2.png'},
      {'no': 15, 'word': 'soprotune', 'test_word': 's _ _ rotune', 'test_image': 'test_N3S1.png'}]
    Routine test
  LoopTerminator test_trials
  Routine inst_URL
